PsychoPy2experiment version="1.75.01"
Settings
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = testpictures
  logging level = debug
  Units = use prefs
  Screen = 1
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Routines
  Routine dots
    TextComponent text
      color = $[-1.000,-1.000,-1.000]
      text = .
      pos [set every repeat] = [randint(-360,360), randint(-360,360)]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 100
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    TextComponent text_2
      color = $[-1.000,-1.000,-1.000]
      text = .
      pos [set every repeat] = [randint(-360,360),randint(-360,360)]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 100
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    KeyboardComponent key_resp
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent image
      stopVal [frame N] = randint(30,1200)
      durationEstim = 5
      startEstim = 0
      units = pix
      startVal [frame N] = 0.0
      image [set every repeat] = $stimFile
      size = [790, 790]
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'stimFile': u'/Users/katielynam/labeled_photos/photos/003030.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003031.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003032.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003033.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003034.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003035.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003036.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003037.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003038.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003039.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003040.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003041.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003042.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003043.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003044.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003045.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003046.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003047.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003048.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003049.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003050.png'},
      {'stimFile': u'/Users/katielynam/labeled_photos/photos/003051.png'}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
    Routine trial
    LoopInitiator probes loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine dots
    LoopTerminator probes
  LoopTerminator trials
